WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(TaskLogicPath(DisplayName=TaskPath), RigPath, SessionPath)
-> IncludeWorkflow
  Path=AllenNeuralDynamics.Core:ReadSchemas.bonsai
  TaskLogicPath=C:\git\Aind.Behavior.DynamicForaging\local\AindDynamicForagingTaskLogic.json
  RigPath=C:\git\Aind.Behavior.DynamicForaging\local\AindDynamicForagingRig.json
  SessionPath=C:\git\Aind.Behavior.DynamicForaging\local\Session.json

GroupWorkflow LoadSchemas
    SubscribeSubject RawSessionSchema
    -> AindDynamicForagingDataSchema.DeserializeFromJson(Type=TypeMapping<AindDynamicForagingDataSchema.Session>)
    -> Take(Count=1)
    -> AsyncSubject SessionSchema

    SubscribeSubject RawRigSchema
    -> AindDynamicForagingDataSchema.DeserializeFromJson(Type=TypeMapping<AindDynamicForagingDataSchema.AindDynamicForagingRig>)
    -> Take(Count=1)
    -> AsyncSubject RigSchema

    SubscribeSubject RawTaskLogicSchema
    -> AindDynamicForagingDataSchema.DeserializeFromJson(Type=TypeMapping<AindDynamicForagingDataSchema.AindDynamicForagingTaskLogic>)
    -> Take(Count=1)
    -> AsyncSubject TaskLogicSchema
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskLogicParameters

GroupWorkflow Init
    Bonsai.Scripting.Python.CreateRuntime(PythonHome=../.venv, ScriptPath=./Extensions\bonsai.py)

    BooleanProperty(Value=false)
    -> Take(Count=1)
    -> BehaviorSubject IsWaveformUploadDone

    CreateAutoWaterState(Value=nil)
    -> Take(Count=1)
    -> BehaviorSubject GlobalAutoWaterState

    SubscribeSubject StartExperiment
    -> Unit
    -> PublishSubject TriggerHarpReadDump

    BehaviorSubject<System.Reactive.Unit> StartLogging
    BehaviorSubject<System.Reactive.Unit> StartExperiment
    BehaviorSubject<System.Reactive.Unit> EndExperiment
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvent
    BehaviorSubject<AindDynamicForagingDataSchema.TrialOutcome> GlobalTrialOutcome
    BehaviorSubject<AindDynamicForagingDataSchema.Trial> GlobalTrial
    BehaviorSubject<System.Tuple(System.Boolean,System.Double)> SetIsRightRewardAmount
    BehaviorSubject<AindDynamicForagingDataSchema.TrialMetrics> GlobalTrialMetrics
    BehaviorSubject<System.Int32> TrialIndex

    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=RngSeed)
    -> AsyncSubject RngSeedValue
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=nil)
    -> AsyncSubject RngObject

    BooleanProperty(Value=false)
    -> Take(Count=1) => #26
    SubscribeSubject StartExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=true) => #29
    SubscribeSubject EndExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=false) => #32
    #26, #29, #32 -> Merge
    -> BehaviorSubject ExperimentState

    Annotation "Default size"(Text="Volume will be set per trial basis based on trial generator spec")
    -> DoubleProperty(Value=2)
    -> BehaviorSubject DefaultRewardSize

    SubscribeSubject SetIsRightRewardAmount
    -> Take(Count=1)
    -> BooleanProperty(Value=true) => #40
    SubscribeSubject DefaultRewardSize => #41
    #40, #41 -> Zip

    SubscribeSubject SetIsRightRewardAmount
    -> Take(Count=1)
    -> BooleanProperty(Value=false) => #45
    SubscribeSubject DefaultRewardSize => #46
    #45, #46 -> Zip

    DoubleProperty(Value=-5) => #48
    DoubleProperty(Value=5) => #49
    #48, #49 -> Zip
    -> Take(Count=1)
    -> AsyncSubject BiasOffsetBounds

GroupWorkflow StartupLogic
    BehaviorSubject<System.Reactive.Unit> StartExperimentShortcut => #0
    Disable SubscribeSubject IsWaveformUploadDone
    -> Disable Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Disable Timeout(DueTime=PT10S)
    -> Disable Take(Count=1) => #4
    #0, #4 -> Disable Zip
    -> Take(Count=1)
    -> Unit
    -> MulticastSubject StartLogging
    -> Delay(DueTime=PT2S)
    -> MulticastSubject StartExperiment

IncludeWorkflow(Path=Extensions\HardwareQA.bonsai)

Annotation(Text="")
-> IncludeWorkflow(Path=Extensions\Hardware.bonsai)

IncludeWorkflow(Path=Extensions\OperationControl.bonsai)

IncludeWorkflow(Path=Extensions\TaskEngine.bonsai)
-> Bonsai.Scripting.Expressions.ExpressionCondition isNull
  Expression: it == null
-> Take(Count=1)
-> Unit
-> Delay(DueTime=PT0.5S)
-> MulticastSubject EndExperiment => #14
SubscribeSubject StartExperiment => #15
#14, #15 -> SubscribeWhen

IncludeWorkflow(Path=Extensions\Logging.bonsai) => #17
SubscribeSubject EndExperiment
-> Delay(DueTime=PT1S) => #19
#17, #19 -> TakeUntil => #20
SubscribeSubject StartLogging => #21
#20, #21 -> SubscribeWhen

SubscribeSubject EndExperiment
-> Take(Count=1)
-> Delay(DueTime=PT2S)
-> WorkflowOutput

GroupWorkflow Visualizers
    GroupWorkflow ImGuiContext
        Bonsai.ImGui.Visualizers.ImPlotVisualizerBuilder
        -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0)
        -> PublishSubject Frame
        -> WorkflowOutput

    GroupWorkflow DataTransformations
        SubscribeSubject GlobalTrialOutcome
        -> IncludeWorkflow HarpTimestampSource(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> BehaviorSubject TimedTrial

        SubscribeSubject GlobalTrialMetrics
        -> MemberSelector(Selector=Bias) => #4
        SubscribeSubject TrialIndex => #5
        #4, #5 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new (it.Item1 as Bias, it.Item2 as TrialIndex)
        -> BehaviorSubject TrialIndexedBias

        SubscribeSubject IsRightLickEvent
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> IncludeWorkflow HarpTimestampSource(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> PublishSubject LickRight

        SubscribeSubject IsRightLickEvent
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> BitwiseNot
            -> WorkflowOutput
        -> IncludeWorkflow HarpTimestampSource(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> PublishSubject LickLeft

        SubscribeSubject SoftwareEvent => #17
        SubscribeSubject IsRightLickEvent
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=LickRight) => #20
        SubscribeSubject IsRightLickEvent
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> BitwiseNot
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=LickLeft) => #23
        SubscribeSubject GiveRewardRight
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=WaterRight) => #26
        SubscribeSubject GiveRewardRight
        -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=WaterLeft) => #30
        #17, #20, #23, #26, #30 -> Merge
        -> IncludeWorkflow HarpTimestampSource(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> AllenNeuralDynamics.Core.TimestampSoftwareEvent
        -> Timestamp
        -> AllenNeuralDynamics.Core.Design.AccumulateToImmutableList
        -> BehaviorSubject EthogramEvents

    GroupWorkflow OutputControl
        GroupWorkflow Manipulator
            PublishSubject<System.Reactive.Unit> UiManipulatorLeft
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=-1, Y1=0, Y2=0, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorRight
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=1, Y1=0, Y2=0, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorForwardLeft
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=1, Y2=0, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorForwardRight
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=1, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorBackLeft
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=-1, Y2=0, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorBackRight
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=-1, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorUp
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=0, Z=1) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorDown
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=0, Z=-1) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorHome
            -> Sink Home
                WorkflowInput Source1
                -> Unit
                -> MulticastSubject HomeMotors
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorStop
            -> Sink StopMotors
                WorkflowInput Source1
                -> Unit
                -> MulticastSubject StopMotors
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorInitialize
            -> Sink GoToInitialPosition
                WorkflowInput Source1
                -> Unit
                -> MulticastSubject GoToInitialPosition
                -> WorkflowOutput

            BehaviorSubject<System.Single> OffsetGain

        PublishSubject<System.Single> UiHabituationTimeUpdate

        DoubleProperty(Value=0.05)
        -> Take(Count=1)
        -> BehaviorSubject BumpSize

        PublishSubject<System.Reactive.Unit> UiMoveLeft
        -> Sink BumpLeft
            WorkflowInput Source1 => #0
            SubscribeSubject BumpSize => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Multiply(Operand=DoubleProperty(Value=-1))
            -> MulticastSubject ManualSpoutDelta
            -> WorkflowOutput

        PublishSubject<System.Reactive.Unit> UiMoveRight
        -> Sink BumpRight
            WorkflowInput Source1 => #0
            SubscribeSubject BumpSize => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject ManualSpoutDelta
            -> WorkflowOutput

        PublishSubject<System.Reactive.Unit> UiGiveRight
        -> Sink TriggerRight
            WorkflowInput Source1
            -> BooleanProperty(Value=true)
            -> MulticastSubject GiveManualWaterRight
            -> WorkflowOutput

        PublishSubject<System.Reactive.Unit> UiGiveLeft
        -> Sink TriggerLeft
            WorkflowInput Source1
            -> BooleanProperty(Value=false)
            -> MulticastSubject GiveManualWaterRight
            -> WorkflowOutput

        PublishSubject<System.Reactive.Unit> UiCueGiveLeft
        -> Sink UpdateGlobalState
            WorkflowInput Source1 => #0
            SubscribeSubject GlobalAutoWaterState => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Expression) => #4
            #3, #4 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.SetLeft()
            -> MulticastSubject GlobalAutoWaterState
            -> WorkflowOutput

        PublishSubject<System.Reactive.Unit> UiCueGiveRight
        -> Sink UpdateGlobalState
            WorkflowInput Source1 => #0
            SubscribeSubject GlobalAutoWaterState => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Expression) => #4
            #3, #4 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.SetRight()
            -> MulticastSubject GlobalAutoWaterState
            -> WorkflowOutput

        BooleanProperty(Value=true)
        -> MulticastSubject IsFlushingValveLeft

        BehaviorSubject<System.Boolean> GiveManualWaterRight
        -> IncludeWorkflow(Path=Extensions\InlineSoftwareEvent.bonsai, EventName=GiveManualWaterRight)
        -> MulticastSubject GiveRewardRight

        BehaviorSubject<System.Boolean> IsFlushingValveLeft
        BehaviorSubject<System.Boolean> IsFlushingValveRight

        PublishSubject<System.Boolean> UiKeepLeftOpen => #24
        PublishSubject<System.Boolean> UiKeepBothOpen => #25
        #24, #25 -> Merge
        -> CreateObservable KeepLeftOpen
            DoubleProperty(Value=50)
            -> Take(Count=1)
            -> AsyncSubject DefaultRewardAmount

            WorkflowInput Source1
            -> BitwiseNot
            -> Condition => #5
                WorkflowInput Source1
                -> WorkflowOutput
            Timer(DueTime=PT0.1S) => #6
            ExternalizedMapping(Value(DisplayName=IsRight)) => #7
            #6, #7 -> BooleanProperty(Value=false) => #8
            SubscribeSubject DefaultRewardAmount => #9
            #8, #9 -> WithLatestFrom
            -> MulticastSubject SetIsRightRewardAmount
            -> Delay(DueTime=PT0.02S)
            -> MemberSelector(Selector=Item1)
            -> MulticastSubject GiveRewardRight
            -> Delay(DueTime=PT0.5S)
            -> Repeat
            -> LastOrDefault => #17
            #5, #17 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> Switch
        PublishSubject<System.Boolean> UiKeepRightOpen => #29
        #29, #25 -> Merge
        -> CreateObservable KeepRightOpen
            DoubleProperty(Value=50)
            -> Take(Count=1)
            -> AsyncSubject DefaultRewardAmount

            WorkflowInput Source1
            -> BitwiseNot
            -> Condition => #5
                WorkflowInput Source1
                -> WorkflowOutput
            Timer(DueTime=PT0.1S) => #6
            ExternalizedMapping(Value(DisplayName=IsRight)) => #7
            #6, #7 -> BooleanProperty(Value=true) => #8
            SubscribeSubject DefaultRewardAmount => #9
            #8, #9 -> WithLatestFrom
            -> MulticastSubject SetIsRightRewardAmount
            -> Delay(DueTime=PT0.02S)
            -> MemberSelector(Selector=Item1)
            -> MulticastSubject GiveRewardRight
            -> Delay(DueTime=PT0.5S)
            -> Repeat
            -> LastOrDefault => #17
            #5, #17 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> Switch

        PublishSubject<System.Boolean> UiDrainLeft => #33
        PublishSubject<System.Boolean> UiDrainBoth => #34
        #33, #34 -> Merge
        -> CreateObservable FlushLeft
            DoubleProperty(Value=50)
            -> Take(Count=1)
            -> AsyncSubject DefaultVolume

            WorkflowInput Source1
            -> BitwiseNot
            -> Condition => #5
                WorkflowInput Source1
                -> WorkflowOutput
            Timer(DueTime=PT0.1S) => #6
            ExternalizedMapping(Value(DisplayName=IsRight)) => #7
            #6, #7 -> BooleanProperty(Value=false) => #8
            SubscribeSubject DefaultVolume => #9
            #8, #9 -> WithLatestFrom
            -> MulticastSubject SetIsRightRewardAmount
            -> Delay(DueTime=PT0.02S)
            -> MemberSelector(Selector=Item1)
            -> MulticastSubject GiveRewardRight => #14
            SubscribeSubject DefaultVolume => #15
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Calibration.WaterValveLeft) => #17
            #15, #17 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToTime
              Expression: ((Item1 * 0.001) - Item2.Offset) / Item2.Slope
            -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
            -> PropertyMapping(DueTime) => #21
            #14, #21 -> Delay(DueTime=PT1.288S) => #22
            SubscribeSubject DefaultVolume
            -> Bonsai.Scripting.Expressions.ExpressionTransform DivideByEachOpen
              Expression: Math.Ceiling(5000 / it)
            -> PropertyMapping(Count) => #25
            #22, #25 -> RepeatCount(Count=100)
            -> LastOrDefault
            -> BooleanProperty(Value=false)
            -> MulticastSubject IsFlushingValveLeft => #29
            #5, #29 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> Switch
        -> PublishSubject DrainLeftComplete
        PublishSubject<System.Boolean> UiDrainRight => #39
        #39, #34 -> Merge
        -> CreateObservable FlushRight
            DoubleProperty(Value=50)
            -> Take(Count=1)
            -> AsyncSubject DefaultVolume

            WorkflowInput Source1
            -> BitwiseNot
            -> Condition => #5
                WorkflowInput Source1
                -> WorkflowOutput
            Timer(DueTime=PT0.1S) => #6
            ExternalizedMapping(Value(DisplayName=IsRight)) => #7
            #6, #7 -> BooleanProperty(Value=true) => #8
            SubscribeSubject DefaultVolume => #9
            #8, #9 -> WithLatestFrom
            -> MulticastSubject SetIsRightRewardAmount
            -> Delay(DueTime=PT0.02S)
            -> MemberSelector(Selector=Item1)
            -> MulticastSubject GiveRewardRight => #14
            SubscribeSubject DefaultVolume => #15
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Calibration.WaterValveRight) => #17
            #15, #17 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToTime
              Expression: ((Item1 * 0.001) - Item2.Offset) / Item2.Slope
            -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
            -> PropertyMapping(DueTime) => #21
            #14, #21 -> Delay(DueTime=PT0.888S) => #22
            SubscribeSubject DefaultVolume
            -> Bonsai.Scripting.Expressions.ExpressionTransform DivideByEachOpen
              Expression: Math.Ceiling(5000 / it)
            -> PropertyMapping(Count) => #25
            #22, #25 -> RepeatCount(Count=100)
            -> LastOrDefault
            -> BooleanProperty(Value=false)
            -> MulticastSubject IsFlushingValveRight => #29
            #5, #29 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> Switch
        -> PublishSubject DrainRightComplete

    GroupWorkflow VisualizerStructure
        ExternalizedMapping(Name(DisplayName=FrameSubject))
        -> SubscribeSubject Frame => #1
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> TableBuilder => #3
          Visible=true
          Columns(ColumnStyling(Name=Ethograph, Flags=WidthStretch, InitValue=0), ColumnStyling(Name=Camera, Flags=WidthFixed, InitValue=320))
          Flags="BordersInnerH BordersOuterH BordersInnerV BordersOuterV BordersH BordersV BordersInner BordersOuter Borders SizingFixedFit"
          OuterSize(X=0, Y=0)
          InnerWidth=0
          ShowHeadersRow=true
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0) => #5
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> PublishSubject Behavior => #7
        #5 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> PublishSubject Bias => #9
        #5 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> PublishSubject Ethogram => #11
        #7, #9, #11 -> Zip => #12
        #3 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> PublishSubject Camera => #14
        #12, #14 -> Zip
        #1 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=Borders, OuterSize(X=0, Y=0), InnerWidth=0)
        -> PublishSubject Metadata => #18
        #1 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.TabBarBuilder(Visible=true, Flags=None) => #20
        -> Bonsai.ImGui.TabItemBuilder PreSession(Visible=true, Text=pre-session, Flags=None)
        -> PublishSubject PreSession => #22
        #20 -> Bonsai.ImGui.TabItemBuilder IntraSession(Visible=true, Text=intra-session, Flags=None)
        -> PublishSubject IntraSession => #24
        #18, #22, #24 -> Zip

    IncludeWorkflow
      Path=Extensions\BehaviorVisualizer.bonsai
      PlotName=Behavior1
      LickLeftSubject=LickLeft
      LickRightSubject=LickRight
      TrialSubject=TimedTrial
      FrameSubject=Behavior

    IncludeWorkflow(Path=Extensions\BiasVisualizer.bonsai, FrameSubject=Bias, TimedBias=TrialIndexedBias)

    Annotation PLACEHOLDER(Text="Placheolder for session information dictionary")
    -> GroupWorkflow SessionInfo
        SubscribeSubject TimedTrial
        -> MemberSelector(Selector=Value.Trial.Metadata.Extra)
        -> BehaviorSubject SessionMetadata
        -> WorkflowOutput

    SubscribeSubject Ethogram => #8
    SubscribeSubject EthogramEvents
    -> PropertyMapping(SoftwareEvents) => #10
    #8, #10 -> SoftwareEventVisualizer
      Visible=true
      SoftwareEvents=""
      TrialBreakEventName=Break
      PlotHeight=200
      ShadedAreaPlotters
        ShadedAreaPlotter(EventName=QuiescentPeriod, Color=Gold, Alpha=0.3)
        ShadedAreaPlotter(EventName=ResponsePeriod, Color=SandyBrown, Alpha=0.3)
        ShadedAreaPlotter(EventName=RewardConsumptionPeriod, Color=RosyBrown, Alpha=0.3)
        ShadedAreaPlotter(EventName=ItiPeriod, Color=Green, Alpha=0.3)
      PointPlotters
        PointPlotter(EventName=LickLeft, Color=Red, YPosition=0.9, MarkerSize=6, Marker=Down)
        PointPlotter(EventName=LickRight, Color=Blue, YPosition=0.1, MarkerSize=6, Marker=Up)
        PointPlotter(EventName=IsRightTriggerQuickRetract, Color=DarkCyan, YPosition=0.5, MarkerSize=6, Marker=Plus)
        PointPlotter(EventName=DeliverSecondaryReinforcer, Color=Sienna, YPosition=0.5, MarkerSize=6, Marker=Plus)
        PointPlotter(EventName=WaterRight, Color=Red, YPosition=0.2, MarkerSize=6, Marker=Circle)
        PointPlotter(EventName=WaterLeft, Color=Blue, YPosition=0.8, MarkerSize=6, Marker=Circle)

    Unit => #12
    -> GroupWorkflow CameraPreviewVisualizer
        WorkflowInput Source1 => #0
        ExternalizedMapping(FrameSubject, CameraName, MinSaturation, MaxSaturation, FlipState, Rotation, TriggeredCamerasStream) => #1
        #0, #1 -> CreateObservable CameraPreview
            ExternalizedMapping(Name(DisplayName=FrameSubject))
            -> SubscribeSubject Camera
            -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0)
            -> PublishSubject Table

            ExternalizedMapping(Name(DisplayName=TriggeredCamerasStream))
            -> SubscribeSubject TriggeredCamerasStream => #5
            ExternalizedMapping(Value(DisplayName=CameraName)) => #6
            #5, #6 -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Key) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=StringProperty(Value=SideCamera))
                -> WorkflowOutput
            -> Merge
            -> PublishSubject CameraStream

            SubscribeSubject Table
            -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true) => #11
            SubscribeSubject CameraStream
            -> MemberSelector(Selector=Value.Image) => #13
            ExternalizedMapping(Value(DisplayName=FlipState))
            -> IntProperty(Value=2) => #15
            #13, #15 -> WithLatestFrom => #16
            -> Condition Flipped => #17
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> LessThan(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #18
            #17 -> MemberSelector(Selector=Item2)
            -> PropertyMapping(Mode) => #20
            #18, #20 -> Bonsai.Vision.Flip(Mode=Vertical) => #21
            #16 -> Condition NotFlipped
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> LessThan(Operand=IntProperty(Value=2))
                -> BitwiseNot
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #23
            #21, #23 -> Merge => #24
            #13 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new (
                 it.Size.Width / 2 as X,
                 it.Size.Height / 2 as Y
                )
            -> InputMapping(X(Selector=X), Y(Selector=Y))
            -> Bonsai.Vision.CreatePoint2f(X=320, Y=240)
            -> PropertyMapping(Pivot) => #28
            ExternalizedMapping(Rotation) => #29
            #28, #29 -> Bonsai.Vision.AffineTransform(Pivot(X=320, Y=240), Translation(X=0, Y=0), Rotation=0, Scale(X=1, Y=1))
            -> PropertyMapping(Transform) => #31
            #24, #31 -> Bonsai.Vision.WarpAffine(Transform="1,0,0;0,1,0", Flags=Linear, FillValue(Val0=0, Val1=0, Val2=0, Val3=0))
            -> Bonsai.ImGui.Visualizers.SampleOnNewFrame Table
            -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear) => #34
            SubscribeSubject OverlayAlpha
            -> PropertyMapping(Alpha) => #36
            ExternalizedMapping(MinSaturation, MaxSaturation) => #37
            #34, #36, #37 -> SaturationShaderPass(Alpha=0.5, MinSaturation=53, MaxSaturation=215)
            -> PropertyMapping(Image) => #39
            #11, #39 -> Bonsai.ImGui.ImageBuilder PreviewImage(Visible=true, ImageSize(X=320, Y=320), UV0(X=0, Y=0), UV1(X=1, Y=1)) => #40
            SubscribeSubject Table
            -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0)
            -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=2, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0) => #45
            -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.TextBuilder(Visible=true, Text=Alpha) => #47
            #45 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
            -> Bonsai.ImGui.SliderFloatBuilder(Visible=true, Min=0, Max=1, Flags=None, InitialValue=0.5)
            -> BehaviorSubject OverlayAlpha => #50
            #47, #50 -> Zip => #51
            #40, #51 -> Zip
        -> Switch
    #12 -> IncludeWorkflow
      Path=Extensions\CameraPreviewVisualizer.bonsai
      FrameSubject=Camera
      CameraName=BodyCamera
      MinSaturation=53
      MaxSaturation=215
      FlipState=2
      Rotation=0
      TriggeredCamerasStream=TriggeredCamerasStream

    SubscribeSubject SessionSchema => #15
    SubscribeSubject TaskLogicSchema => #16
    #15, #16 -> WithLatestFrom
    -> IncludeWorkflow
      Path=Extensions\MetadataVisualizer.bonsai
      FrameSubject=Metadata
      StartExperimentSubject=StartExperimentShortcut
      UiHabituationTimeUpdate=UiHabituationTimeUpdate

    IncludeWorkflow
      Path=Extensions\PreSessionVisualizer.bonsai
      FrameSubject=PreSession
      UiKeepLeftOpne=UiKeepLeftOpen
      UiKeepRightOpen=UiKeepRightOpen
      UiKeepBothOpen=UiKeepBothOpen
      UiDrainLeft=UiDrainLeft
      UiDrainRight=UiDrainRight
      UiDrainBoth=UiDrainBoth
      UiManipulatorLeft=UiManipulatorLeft
      UiManipulatorForwardLeft=UiManipulatorForwardLeft
      UiManipulatorForwardRight=UiManipulatorForwardRight
      UiManipulatorUp=UiManipulatorUp
      UiManipulatorRight=UiManipulatorRight
      UiManipulatorBackLeft=UiManipulatorBackLeft
      UiManipulatorBackRight=UiManipulatorBackRight
      UiManipulatorDown=UiManipulatorDown
      UiManipulatorStop=UiManipulatorStop
      UiManipulatorHome=UiManipulatorHome
      UiControlManipulator=UiManipulatorInitialize
      DrainLeftComplete=DrainLeftComplete
      DrainRightComplete=DrainRightComplete

    IncludeWorkflow
      Path=Extensions\IntraSessionVisualizer.bonsai
      FrameSubject=IntraSession
      UiGiveLeft=UiGiveLeft
      UiGiveRight=UiGiveRight
      UiMoveLeft=UiMoveLeft
      UiMoveRight=UiMoveRight
      StartExperimentSubject=StartExperiment
      UiCueGiveLeft=UiCueGiveLeft
      UiCueGiveRight=UiCueGiveRight
      SessionMetadataSubject=SessionMetadata
